#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    simpledummy:
        module.Class: 'simple_data_dummy.SimpleDummy'

    mykrowave:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        gpib_address: 'dummy'
        gpib_timeout: 20
        mock: True

    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        clock_channel: '/Dev1/Ctr0'
        clock_frequency: 100
        counter_channel: '/Dev1/Ctr1'
        photon_source: '/Dev1/PFI8'
        photon_source2: '/Dev1/PFI9'
        count_distribution: 'dark_bright_poisson'
        remoteaccess: True

    mydummyodmrcounter:
        module.Class: 'odmr_counter_dummy.ODMRCounterDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

    mydummyfastcounter:
        module.Class: 'fast_counter_dummy.FastCounterDummy'

    mydummypulser:
        module.Class: 'pulser_dummy.PulserDummy'

    mydummywavemeter:
        module.Class: 'wavemeter_dummy.WavemeterDummy'
        measurement_timing: 10

    mydummyswitch1:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    mydummyswitch2:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    myspectrometer:
        module.Class: 'spectrometer.spectrometer_dummy.SpectrometerInterfaceDummy'
        connect:
            fitlogic: 'fitlogic'

    motordummy:
        module.Class: 'motor.motor_dummy.MotorDummy'

    magnetdummy:
        module.Class: 'magnet.magnet_dummy.MagnetDummy'

logic:
    qdplot:
        module.Class: 'qdplot_logic.QdplotLogic'
        connect:
            savelogic: 'savelogic'

    simplelogic:
        module.Class: 'simple_data_logic.SimpleDataLogic'
        connect:
            simpledata: 'simpledummy'

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    pulsedmasterlogic:
        module.Class: 'pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'sequence_generator_logic.SequenceGeneratorLogic'

    pulseextractionlogic:
        module.Class: 'pulse_extraction_logic.PulseExtractionLogic'

    pulseanalysislogic:
        module.Class: 'pulse_analysis_logic.PulseAnalysisLogic'

    pulsedmeasurementlogic:
        module.Class: 'pulsed_measurement_logic.PulsedMeasurementLogic'
        connect:
            fastcounter: 'mydummyfastcounter'
            pulseanalysislogic: 'pulseanalysislogic'
            pulseextractionlogic: 'pulseextractionlogic'
            pulsegenerator: 'mydummypulser'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'mykrowave'

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter'
            savelogic: 'savelogic'

    gatedcounterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter'
            savelogic: 'savelogic'

    wavemeterlogger:
        module.Class: 'wavemeter_logger_logic.WavemeterLoggerLogic'
        logic_acquisition_timing: 20
        logic_update_timing: 100
        connect:
            wavemeter1: 'mydummywavemeter.highhinessewavemeter'
            savelogic: 'savelogic'
            counterlogic: 'counterlogic'

    switchlogic:
        module.Class: 'switch_logic.SwitchLogic'
        connect:
            switch1: 'mydummyswitch1'
            switch2: 'mydummyswitch2'

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            savelogic: 'savelogic'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            fitlogic: 'fitlogic'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimizer1: 'optimizerlogic'
            savelogic: 'savelogic'

    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'mydummyodmrcounter.odmrcounter'
            fitlogic: 'fitlogic'
            microwave1: 'mykrowave'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
            scannerLocationRefocus:
                module: 'refocus'
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'

    automationlogic:
        module.Class: 'automation.AutomationLogic'
        connect:
            taskrunner: 'tasklogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'
        unix_data_directory: 'Data/'

    spectrumlogic:
        module.Class: 'spectrum_logic_for_cvd.SpectrumLogic'
        connect:
            spectrometer: 'myspectrometer'
            savelogic: 'savelogic'
            odmrlogic1: 'odmrlogic'

    magnet_logic:
        module.Class: 'magnet_logic.MagnetLogic'
        connect:
            magnetstage: 'magnetdummy'
            optimizerlogic: 'optimizerlogic'
            counterlogic: 'counterlogic'
            odmrlogic: 'odmrlogic'
            savelogic: 'savelogic'
            scannerlogic: 'scannerlogic'

    magnet_motor_interfuse:
        module.Class: 'interfuse.magnet_motor_interfuse.MagnetMotorInterfuse'
        connect:
            motorstage: 'motordummy'

    trace_analysis_logic:
        module.Class: 'trace_analysis_logic.TraceAnalysisLogic'
        connect:
            counterlogic1: 'gatedcounterlogic'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    qdplotter:
        module.Class: 'qdplotter.qdplottergui.QdplotterGui'
        connect:
            qdplotlogic1: 'qdplot'

    counter:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    wavemeterloggui:
        module.Class: 'wavemeterlogger.wavemeterloggui.WavemeterLogGui'
        connect:
            wavemeterloggerlogic1: 'wavemeterlogger'
            savelogic: 'savelogic'

    switches:
        module.Class: 'switcher.switchgui.SwitchGui'
        connect:
            switchlogic: 'switchlogic'

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic1: 'poimanagerlogic'
            confocallogic1: 'scannerlogic'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'savelogic'

    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'
            savelogic: 'savelogic'

    taskrunner:
        module.Class: 'taskrunner.taskgui.TaskGui'
        connect:
            tasklogic: 'tasklogic'

    automation:
        module.Class: 'automation.automationgui.AutomationGui'
        connect:
            automationlogic: 'automationlogic'

    spectrometer:
        module.Class: 'spectrometer_for_cvd.spectrometergui.SpectrometerGui'
        connect:
            spectrumlogic1: 'spectrumlogic'

    simpledata:
        module.Class: 'simpledatagui.simpledatagui.SimpleDataGui'
        connect:
            simplelogic: 'simplelogic'

    magnet:
        module.Class: 'magnet.magnet_gui.MagnetGui'
        connect:
            magnetlogic1: 'magnet_logic'
            savelogic: 'savelogic'

    gatedcounter:
        module.Class: 'gated_counter.gated_counter_gui.GatedCounterGui'
        connect:
            gatedcounterlogic1: 'gatedcounterlogic'
            traceanalysislogic1: 'trace_analysis_logic'

